<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-94.5</Left>
        <Right>0</Right>
        <Bottom>-27</Bottom>
        <Top>51</Top>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DrawStim</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Black</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>37.5</Width>
        <Height>30</Height>
        <Rotation>
          <X>0</X>
          <Y>44.00000008604669</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>-12</X>
          <Y>6.2</Y>
          <Z>-12.6</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>1</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LogPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Events</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>FileCount</Suffix>
        <FileName>C:\Data\Hedes\2022-10-03\Log.csv</FileName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>8</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ChirpDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0.5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ChirpLow</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>8</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ChirpHigh</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LightDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\Hedes\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="scr:PythonSource">
        <scr:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</scr:Script>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\Log.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LogPath</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncQuadLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Boolean">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Boolean">
              <Name>SyncSum</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Xor">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SyncSum</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Mod">
                <Operand xsi:type="DoubleProperty">
                  <Value>2</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="it" />
                <Property Name="ColorG" Selector="it" />
                <Property Name="ColorB" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>10</ExtentX>
              <ExtentY>10</ExtentY>
              <LocationX>-2</LocationX>
              <LocationY>-16</LocationY>
              <Layer>100</Layer>
              <Angle>15</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="14" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="CreateAsync">
        <Name>VisualProtocol</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ChirpContrast</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ChirpDuration</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT8S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                    <Duration>8</Duration>
                    <RangeBegin>0</RangeBegin>
                    <RangeEnd>1</RangeEnd>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Amplitude" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>1</dsp:BufferLength>
                      <dsp:Frequency>10</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>100</dsp:SampleRate>
                      <dsp:Amplitude>1</dsp:Amplitude>
                      <dsp:Offset>0.5</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="it" />
                      <Property Name="ColorG" Selector="it" />
                      <Property Name="ColorB" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0.5</ColorR>
                    <ColorG>0.5</ColorG>
                    <ColorB>0.5</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="12" Label="Source2" />
                  <Edge From="4" To="11" Label="Source2" />
                  <Edge From="4" To="16" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ChirpFrequency</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ChirpHigh</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RangeEnd" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ChirpLow</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RangeBegin" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                    <Duration>10</Duration>
                    <RangeBegin>0.5</RangeBegin>
                    <RangeEnd>8</RangeEnd>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Frequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FunctionGenerator">
                      <dsp:BufferLength>1</dsp:BufferLength>
                      <dsp:Frequency>6.5</dsp:Frequency>
                      <dsp:Waveform>Sine</dsp:Waveform>
                      <dsp:SampleRate>100</dsp:SampleRate>
                      <dsp:Amplitude>1</dsp:Amplitude>
                      <dsp:Offset>0.5</dsp:Offset>
                      <dsp:Phase>0</dsp:Phase>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="it" />
                      <Property Name="ColorG" Selector="it" />
                      <Property Name="ColorB" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ChirpDuration</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT8S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0.501570642</ColorR>
                    <ColorG>0.501570642</ColorG>
                    <ColorB>0.501570642</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="15" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="16" Label="Source2" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="14" To="20" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LightOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>-114</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BlueOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GreenOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GreyOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0.5</ColorR>
                    <ColorG>0.5</ColorG>
                    <ColorB>0.5</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GreyOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0.5</ColorR>
                    <ColorG>0.5</ColorG>
                    <ColorB>0.5</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GreyOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0.5</ColorR>
                    <ColorG>0.5</ColorG>
                    <ColorB>0.5</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LightOnBlack</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>-113</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>0</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LightOnBlack</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>-113</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>0</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LightOnBlack</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>-113</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>0</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LightOnBlack</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>-113</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>0</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT4S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LightOnBlack</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStim</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>360</ExtentX>
                    <ExtentY>360</ExtentY>
                    <LocationX>-113</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>0</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT10S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="13" Label="Source7" />
            <Edge From="1" To="13" Label="Source5" />
            <Edge From="2" To="13" Label="Source2" />
            <Edge From="3" To="13" Label="Source10" />
            <Edge From="4" To="13" Label="Source12" />
            <Edge From="5" To="13" Label="Source4" />
            <Edge From="6" To="13" Label="Source6" />
            <Edge From="7" To="13" Label="Source8" />
            <Edge From="8" To="13" Label="Source1" />
            <Edge From="9" To="13" Label="Source3" />
            <Edge From="10" To="13" Label="Source9" />
            <Edge From="11" To="13" Label="Source11" />
            <Edge From="12" To="13" Label="Source13" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="12" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="28" Label="Source1" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="27" To="28" Label="Source3" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>