<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="WindowState" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Set Bonvision params</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" />
              <Property Name="WindowState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicVideo</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-94.5</Left>
              <Right>0</Right>
              <Bottom>-27</Bottom>
              <Top>51</Top>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <Angle>0</Angle>
              <TextureName>DynamicVideo</TextureName>
              <ExtentX>90</ExtentX>
              <ExtentY>80</ExtentY>
              <LocationX>-43</LocationX>
              <LocationY>12</LocationY>
              <Layer>0</Layer>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>37.5</Width>
              <Height>30</Height>
              <Rotation>
                <X>0</X>
                <Y>43.599996887494058</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-14.5</X>
                <Y>6.2</Y>
                <Z>-15</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LogDir</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
              <Name>Events</Name>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>FileCount</Suffix>
              <FileName>C:\Data\FG002\2022-10-24\Log.csv</FileName>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>Metadata</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>photodiode</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>frameclock</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>pockel</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>piezo</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>sync</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Saving Dir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\nidaqChannels.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DateDir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\FG002\2022-10-24\nidaqChannels.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>9</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>8</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Saving Dir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\props.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DateDir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\FG002\2022-10-24\props.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>rotary1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>rotary2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>camera1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>camera2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>sync</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Saving Dir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\arduinoChannels.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DateDir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\FG002\2022-10-24\arduinoChannels.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="6" Label="Source2" />
                  <Edge From="3" To="6" Label="Source3" />
                  <Edge From="4" To="6" Label="Source4" />
                  <Edge From="5" To="6" Label="Source5" />
                  <Edge From="6" To="13" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="10" Label="Source3" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="24" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="21" Label="Source3" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="31" Label="Source1" />
                  <Edge From="27" To="31" Label="Source2" />
                  <Edge From="28" To="31" Label="Source3" />
                  <Edge From="29" To="31" Label="Source4" />
                  <Edge From="30" To="31" Label="Source5" />
                  <Edge From="31" To="38" Label="Source1" />
                  <Edge From="32" To="35" Label="Source1" />
                  <Edge From="33" To="35" Label="Source3" />
                  <Edge From="34" To="35" Label="Source2" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="16" Label="Source1" />
            <Edge From="5" To="17" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init Variables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>22</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>22</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitialSyncState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DurationSingleImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>Q</gli:Key>
          <gli:Modifiers>Control</gli:Modifiers>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FinalGrayScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>120</ExtentX>
              <ExtentY>120</ExtentY>
              <LocationX>-60</LocationX>
              <LocationY>30</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartDisplay</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialGray Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100000</ExtentX>
              <ExtentY>100000</ExtentY>
              <LocationX>-3</LocationX>
              <LocationY>-16</LocationY>
              <Layer>10</Layer>
              <Angle>15</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SparseNoise Group</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Collections.SparseNoise.bonsai">
              <Duration>PT0.166666S</Duration>
              <ActiveQuads>5</ActiveQuads>
              <GridSize>
                <Width>9</Width>
                <Height>8</Height>
              </GridSize>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>SparseNoiseFrame</Format>
              <Selector xsi:nil="true" />
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SparseNoiseDir</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:\Data\FG002\2022-10-24\SparseNoise.bin</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>TriggerSyncQuad</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Mod">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>RepCounter</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>DynamicVideo</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT10M</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EndAcq</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port2/line6</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port2/line6</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>StartDisplay</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EndAcq</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port2/line6</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port2/line6</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Amb" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Sync Square</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>10</ExtentX>
              <ExtentY>10</ExtentY>
              <LocationX>-3</LocationX>
              <LocationY>-16</LocationY>
              <Layer>10</Layer>
              <Angle>15</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\FG002\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="scr:PythonSource">
        <scr:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</scr:Script>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\SparseNoise.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>SparseNoiseDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\Log.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LogDir</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="10" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="17" Label="Source3" />
      <Edge From="8" To="16" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="17" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="20" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="30" Label="Source3" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="36" Label="Source3" />
      <Edge From="34" To="36" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>