WorkflowBuilder(Version=2.8.5)
Bonsai.IO.CreateSerialPort
  Name=ArduinoAnalog
  PortName=COM3
  BaudRate=115200
  Encoding=utf-8
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=true
  RtsEnable=false
  ReadBufferSize=2048
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

GroupWorkflow SetSave
    StringProperty(Value=C:\Data\XX\)
    -> BehaviorSubject "Saving Dir"

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyy-MM-dd")
    -> BehaviorSubject DateDir

    SubscribeSubject "Saving Dir" => #4
    SubscribeSubject DateDir => #5
    StringProperty(Value=\Video.avi) => #6
    #4, #5, #6 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject VideoPath

    SubscribeSubject "Saving Dir" => #10
    SubscribeSubject DateDir => #11
    StringProperty(Value=\Log.csv) => #12
    #10, #11, #12 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject LogPath

    SubscribeSubject "Saving Dir" => #16
    SubscribeSubject DateDir => #17
    StringProperty(Value=\NiDaqInput.bin) => #18
    #16, #17, #18 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject NidaqPath

    SubscribeSubject "Saving Dir" => #22
    SubscribeSubject DateDir => #23
    StringProperty(Value=\VideoBottom.avi) => #24
    #22, #23, #24 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject VideoBottomPath

    SubscribeSubject "Saving Dir" => #28
    SubscribeSubject DateDir => #29
    StringProperty(Value=\ArduinoInput.csv) => #30
    #28, #29, #30 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject ArduinoInput

Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n)
-> PublishSubject Arduino

Bonsai.DAQmx.AnalogInput
  SignalSource=""
  SampleRate=1000
  ActiveEdge=Rising
  SampleMode=ContinuousSamples
  BufferSize=1
  SamplesPerChannel=nil
  Channels
    AnalogInputChannelConfiguration(ChannelName=Photodiode, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai0, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=ArduinoSync, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev1/ai1, TerminalConfiguration=Rse, VoltageUnits=Volts)
-> PublishSubject NIDAQ

SubscribeSubject Arduino
-> Skip(Count=20)
-> Condition
    WorkflowInput Source1
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        @returns(bool)
        def process(value):
          mylist = value.split("\t")

          if len(mylist) == 6:
            return True
          else:
            return False
    -> WorkflowOutput
-> Parse(Pattern="%I\t%I\t%I\t%I\t%I\t%I,", Separator="") => #9
-> MemberSelector(Selector=Item1) => #10
#9 -> MemberSelector(Selector=Item2) => #11
#9 -> MemberSelector(Selector=Item3) => #12
#9 -> MemberSelector(Selector=Item4) => #13
#9 -> MemberSelector(Selector=Item5) => #14
#9 -> MemberSelector(Selector=Item6) => #15
#10, #11, #12, #13, #14, #15 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform => #17
  Expression: new(Item1 as Wheel1, Item2 as Wheel2, Item3 as Camera, Item4 as Camera2, Item5 as Sync,  Item6 as Time)
SubscribeSubject ArduinoInput
-> PropertyMapping(FileName) => #19
#17, #19 -> Bonsai.IO.CsvWriter(FileName=C:\Data\XX\2024-09-11\ArduinoInput.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=22038056, ColorProcessing=NoColorProcessing) => #21
Bonsai.Shaders.Timer(DueTime=PT5S) => #22
#21, #22 -> SubscribeWhen
-> MemberSelector(Selector=Image) => #24
SubscribeSubject VideoPath
-> PropertyMapping(FileName) => #26
#24, #26 -> Bonsai.Vision.VideoWriter
  FileName=C:\Data\XX\2024-09-11\Video.avi
  Suffix=FileCount
  Buffered=false
  Overwrite=false
  FourCC=FMP4
  FrameRate=50
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=Video, Selector=nil)

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=22112275, ColorProcessing=NoColorProcessing) => #29
Bonsai.Shaders.Timer(DueTime=PT5S) => #30
#29, #30 -> SubscribeWhen
-> MemberSelector(Selector=Image) => #32
SubscribeSubject VideoBottomPath
-> PropertyMapping(FileName) => #34
#32, #34 -> Bonsai.Vision.VideoWriter
  FileName=C:\Data\XX\2024-09-11\VideoBottom.avi
  Suffix=FileCount
  Buffered=false
  Overwrite=false
  FourCC=FMP4
  FrameRate=60
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=VideoBottom, Selector=nil)

SubscribeSubject NidaqPath
-> PropertyMapping(Path) => #38
SubscribeSubject NIDAQ
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=AnalogIn, Selector=nil) => #40
#38, #40 -> Bonsai.Dsp.MatrixWriter(Path=C:\Data\XX\2024-09-11\NiDaqInput.bin, Suffix=FileCount, Overwrite=false, Layout=RowMajor)
-> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=NIDAQ, Selector="Rows,Cols,Step")

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Fixed
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Resources.LoadResources

Bonsai.Numerics.CreateRandom(Seed=nil)
-> BehaviorSubject rand

SubscribeSubject drawStim
-> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=10
  ExtentY=10
  LocationX=-3
  LocationY=-16
  Layer=10
  Angle=15
  ColorR=1
  ColorG=1
  ColorB=1
  ColorA=1

Bonsai.Shaders.RenderFrame => #50
Bonsai.Shaders.Timer(DueTime=PT10S) => #51
#50, #51 -> SubscribeWhen
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-94.5, Right=0, Bottom=-27, Top=51)
-> Disable IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> BehaviorSubject drawStim
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=37.5, Height=30, Rotation(X=0, Y=43.599996887494058, Z=0), Translation(X=-14.5, Y=6.2, Z=-15))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
SubscribeSubject LogPath
-> PropertyMapping(FileName) => #60
#50, #60 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=FileCount, FileName=C:\Data\XX\2024-09-11\Log.csv)
#50 -> Sink Metadata
    WorkflowInput Source2
    -> StringProperty(Value=photodiode) => #1
    StringProperty(Value=sync) => #2
    #1, #2 -> Zip => #3
    SubscribeSubject "Saving Dir" => #4
    SubscribeSubject DateDir => #5
    StringProperty(Value=\nidaqChannels.csv) => #6
    #4, #5, #6 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #9
    #3, #9 -> Bonsai.IO.CsvWriter(FileName=C:\Data\XX\2024-09-11\nidaqChannels.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
    -> WorkflowOutput

    WorkflowInput Source1
    -> StringProperty(Value=rotary1) => #13
    StringProperty(Value=rotary2) => #14
    StringProperty(Value=camera1) => #15
    StringProperty(Value=camera2) => #16
    StringProperty(Value=sync) => #17
    #13, #14, #15, #16, #17 -> Zip => #18
    SubscribeSubject "Saving Dir" => #19
    SubscribeSubject DateDir => #20
    StringProperty(Value=\arduinoChannels.csv) => #21
    #19, #20, #21 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #24
    #18, #24 -> Bonsai.IO.CsvWriter(FileName=C:\Data\XX\2024-09-11\arduinoChannels.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

    StringProperty(Value=Oddball) => #26
    StringProperty(Value=Ori) => #27
    StringProperty(Value=SFreq) => #28
    StringProperty(Value=TFreq) => #29
    StringProperty(Value=Contrast) => #30
    #26, #27, #28, #29, #30 -> Zip => #31
    SubscribeSubject "Saving Dir" => #32
    SubscribeSubject DateDir => #33
    StringProperty(Value=\props.csv) => #34
    #32, #33, #34 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #37
    #31, #37 -> Bonsai.IO.CsvWriter(FileName=C:\Data\XX\2024-09-11\props.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

CreateAsync "Oddball Protocol"
    Defer "Control Equal Probability"
        Bonsai.IO.CsvReader(FileName=control_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=90)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=4
              Phase=0
              Angle=90
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.25S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams

            Disable SubscribeSubject drawStim => #26
            Disable Bonsai.Shaders.RenderFrame
            -> Disable ElementIndex
            -> Disable MemberSelector(Selector=Index)
            -> Disable Mod(Operand=IntProperty(Value=2))
            -> Disable PropertyMapping(ColorR, ColorG, ColorB) => #31
            #26, #31 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=100
              LocationY=-40
              Layer=100
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #1
    Defer Oddball
        Bonsai.IO.CsvReader(FileName=oddball_home.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=90)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=90
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #3
    Defer "Control Equal Probability"
        Bonsai.IO.CsvReader(FileName=control_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=30)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=30
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams

            Disable SubscribeSubject drawStim => #26
            Disable Bonsai.Shaders.RenderFrame
            -> Disable ElementIndex
            -> Disable MemberSelector(Selector=Index)
            -> Disable Mod(Operand=IntProperty(Value=2))
            -> Disable PropertyMapping(ColorR, ColorG, ColorB) => #31
            #26, #31 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=100
              LocationY=-40
              Layer=100
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #5
    Defer "Inverse Oddball"
        Bonsai.IO.CsvReader(FileName=inverse_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=0)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=0
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #7
    Defer "Control Equal Probability"
        Bonsai.IO.CsvReader(FileName=control_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=30)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=30
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams

            Disable SubscribeSubject drawStim => #26
            Disable Bonsai.Shaders.RenderFrame
            -> Disable ElementIndex
            -> Disable MemberSelector(Selector=Index)
            -> Disable Mod(Operand=IntProperty(Value=2))
            -> Disable PropertyMapping(ColorR, ColorG, ColorB) => #31
            #26, #31 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=100
              LocationY=-40
              Layer=100
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #9
    Defer "Inverse Oddball"
        Bonsai.IO.CsvReader(FileName=inverse_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=0)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=0
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #11
    Defer "Control Equal Probability"
        Bonsai.IO.CsvReader(FileName=control_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=30)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=30
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams

            Disable SubscribeSubject drawStim => #26
            Disable Bonsai.Shaders.RenderFrame
            -> Disable ElementIndex
            -> Disable MemberSelector(Selector=Index)
            -> Disable Mod(Operand=IntProperty(Value=2))
            -> Disable PropertyMapping(ColorR, ColorG, ColorB) => #31
            #26, #31 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=100
              LocationY=-40
              Layer=100
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #13
    Defer Oddball
        Bonsai.IO.CsvReader(FileName=oddball_home.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=90)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=90
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #15
    Defer "Control Equal Probability"
        Bonsai.IO.CsvReader(FileName=control_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=30)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=30
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams

            Disable SubscribeSubject drawStim => #26
            Disable Bonsai.Shaders.RenderFrame
            -> Disable ElementIndex
            -> Disable MemberSelector(Selector=Index)
            -> Disable Mod(Operand=IntProperty(Value=2))
            -> Disable PropertyMapping(ColorR, ColorG, ColorB) => #31
            #26, #31 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=100
              LocationY=-40
              Layer=100
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #17
    Defer "Inverse Oddball"
        Bonsai.IO.CsvReader(FileName=inverse_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=0)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=0
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #19
    Defer "Control Equal Probability"
        Bonsai.IO.CsvReader(FileName=control_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=30)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=30
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams

            Disable SubscribeSubject drawStim => #26
            Disable Bonsai.Shaders.RenderFrame
            -> Disable ElementIndex
            -> Disable MemberSelector(Selector=Index)
            -> Disable Mod(Operand=IntProperty(Value=2))
            -> Disable PropertyMapping(ColorR, ColorG, ColorB) => #31
            #26, #31 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=100
              LocationY=-40
              Layer=100
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #21
    Defer Oddball
        Bonsai.IO.CsvReader(FileName=oddball_home.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=90)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=90
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #23
    Defer "Control Equal Probability"
        Bonsai.IO.CsvReader(FileName=control_oddball.csv, ListSeparator=",", ScanPattern="", SkipRows=1) => #0
        SubscribeSubject rand => #1
        #0, #1 -> Bonsai.Numerics.Permutation
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Double.Parse(it[0]) as Ori,
            Double.Parse(it[1]) as SFreq,
            Double.Parse(it[2]) as TFreq,
            Double.Parse(it[3]) as Contrast
            )
        -> CreateObservable GratingPres
            SubscribeSubject drawStim
            -> IncludeWorkflow => #1
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=-3
              LocationY=-16
              Layer=10
              Angle=15
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Bonsai.Shaders.Timer(DueTime=PT0.25S) => #2
            #1, #2 -> TakeUntil
            SubscribeSubject drawStim => #4
            SubscribeSubject GratingParams
            -> PropertyMapping(Value(Selector=Ori))
            -> DoubleProperty(Value=30)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle(Selector=it)) => #9
            SubscribeSubject GratingParams
            -> PropertyMapping(SpatialFrequency(Selector=SFreq)) => #11
            SubscribeSubject GratingParams
            -> PropertyMapping(TemporalFrequency(Selector=TFreq)) => #13
            SubscribeSubject GratingParams
            -> PropertyMapping(Contrast(Selector=Contrast)) => #15
            #4, #9, #11, #13, #15 -> IncludeWorkflow => #16
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=360
              ExtentY=360
              SpatialFrequency=0.08
              TemporalFrequency=2
              Phase=0
              Angle=30
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            #16, #2 -> TakeUntil => #17
            Bonsai.Scripting.IronPython.PythonSource
              Script:
                from System import TimeSpan

                @returns(TimeSpan)
                def generate():
                  yield TimeSpan.FromSeconds(0.25)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=ISI:{0}, Selector=TotalSeconds)
            -> PropertyMapping(DueTime) => #20
            #17, #20 -> Bonsai.Shaders.Delay(DueTime=PT0.3S)
            -> WorkflowOutput

            WorkflowInput Source1
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Ori={0}, SFreq={1}, TFreq={2}, Contrast={3}", Selector="Ori,SFreq,TFreq,Contrast")
            -> AsyncSubject GratingParams

            Disable SubscribeSubject drawStim => #26
            Disable Bonsai.Shaders.RenderFrame
            -> Disable ElementIndex
            -> Disable MemberSelector(Selector=Index)
            -> Disable Mod(Operand=IntProperty(Value=2))
            -> Disable PropertyMapping(ColorR, ColorG, ColorB) => #31
            #26, #31 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=100
              LocationY=-40
              Layer=100
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
        -> Concat
        -> RepeatCount(Count=1)
        -> Last
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT10S) => #25
    #1, #3, #5, #7, #9, #11, #13, #15, #17, #19, #21, #23, #25 -> Concat
    -> WorkflowOutput
-> DelaySubscription(DueTime=PT10S)
-> WorkflowOutput
