<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21225772</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Data\Cassiopeia\TriggerTest\eye.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>100</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21038392</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Data\Cassiopeia\TriggerTest\body.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerRead>-1</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>RotaryEncoder 1</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>RotaryEncoder 2</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai4</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>EyeCamera Trigger</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\Cassiopeia\TriggerTest\rotary_encoder</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>960</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>