<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetSave</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\XX\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Experimental_grid.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GridPath</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="7" Label="Source2" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>22038056</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>FACE</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>22112275</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BODY</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FACE</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BODY</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-94.5</Left>
        <Right>0</Right>
        <Bottom>-27</Bottom>
        <Top>51</Top>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>drawStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>37.5</Width>
        <Height>30</Height>
        <Rotation>
          <X>0</X>
          <Y>43.599996887494058</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>-14.5</X>
          <Y>6.2</Y>
          <Z>-15</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>1</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Metadata</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowInput">
                <Name>Source2</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>photodiode</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>sync</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Saving Dir</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>DateDir</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>\nidaqChannels.csv</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
                <Format>{0}{1}{2}</Format>
                <Selector>Item1,Item2,Item3</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>C:\Data\FG003\2023-03-06\nidaqChannels.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>FileCount</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>X</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>Y</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>Diameter</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>White</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>Dur</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Saving Dir</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>DateDir</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>\props.csv</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
                <Format>{0}{1}{2}</Format>
                <Selector>Item1,Item2,Item3</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>C:\Data\FG003\2023-03-06\props.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>FileCount</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>rotary1</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>rotary2</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>camera1</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>camera2</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>Sync</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Saving Dir</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>DateDir</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>\arduinoChannels.csv</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Format">
                <Format>{0}{1}{2}</Format>
                <Selector>Item1,Item2,Item3</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="FileName" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>C:\Data\FG003\2023-03-06\arduinoChannels.csv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>false</io:Overwrite>
                <io:Suffix>FileCount</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="7" Label="Source2" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="17" Label="Source1" />
            <Edge From="13" To="17" Label="Source2" />
            <Edge From="14" To="17" Label="Source3" />
            <Edge From="15" To="17" Label="Source4" />
            <Edge From="16" To="17" Label="Source5" />
            <Edge From="17" To="24" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="21" Label="Source2" />
            <Edge From="20" To="21" Label="Source3" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="31" Label="Source1" />
            <Edge From="27" To="31" Label="Source2" />
            <Edge From="28" To="31" Label="Source3" />
            <Edge From="29" To="31" Label="Source4" />
            <Edge From="30" To="31" Label="Source5" />
            <Edge From="31" To="38" Label="Source1" />
            <Edge From="32" To="35" Label="Source1" />
            <Edge From="33" To="35" Label="Source2" />
            <Edge From="34" To="35" Label="Source3" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="CreateAsync">
        <Name>  Grid</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>full_grid.csv</io:FileName>
              <io:ListSeparator>,</io:ListSeparator>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Single.Parse(it[0]) as X,
Single.Parse(it[1]) as Y,
Single.Parse(it[2]) as Diameter,
Single.Parse(it[3]) as White,
Double.parse(it[4]) as Dur,
TimeSpan.FromSeconds(Double.Parse(it[4])) as dueTime
)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>Circle group</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>drawStim</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" Selector="X" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationY" Selector="Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Diameter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="White" />
                      <Property Name="ColorG" Selector="White" />
                      <Property Name="ColorB" Selector="White" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <Diameter>16</Diameter>
                    <LocationX>-10</LocationX>
                    <LocationY>40</LocationY>
                    <Layer>0</Layer>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="dueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>Space</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GridPath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\FG003\2023-06-09\Experimental_grid.csv</io:FileName>
                    <io:Append>true</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:Selector>Item2.X,Item2.Y</io:Selector>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source4" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source5" />
                  <Edge From="9" To="13" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="19" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="22" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT10S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="12" To="21" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>