<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\CameraTicks.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>CameraTriggerPath</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\ForwardsEncoder.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ForwardsEncoder</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\BackwardsEncoder.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>BackwardsEncoder</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\NiDaqInput.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NidaqPath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\SS112\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="scr:PythonSource">
        <scr:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</scr:Script>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>GiveReward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                    <mx:Lines>Dev1/port2/line4</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                    <mx:Lines>Dev1/port2/line4</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT10S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerRead>-1</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Spout</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>AnalogIn</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NidaqPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\Test\2022-05-03\NiDaqInput.bin</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>NIDAQ</Format>
          <Selector>Rows,Cols,Step</Selector>
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21225772</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Data\Test\2022-05-03\Video.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>20</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Video</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\Video.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>VideoPath</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LogPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.EventLogger.bonsai">
        <Name>Events</Name>
        <FileName>C:\Data\Test\2022-05-03\Log.csv</FileName>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>FileCount</Suffix>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\Log.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LogPath</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTriggerPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>CameraIn</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\Test\2022-05-03\CameraTicks.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ForwardsEncoder</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>ForwardIn</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\Test\2022-05-03\ForwardsEncoder.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>3</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>BackwardsIn</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BackwardsEncoder</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\Test\2022-05-03\BackwardsEncoder.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="3" Label="Source2" />
      <Edge From="2" To="3" Label="Source3" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="9" Label="Source2" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="14" To="15" Label="Source3" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="19" To="21" Label="Source2" />
      <Edge From="20" To="21" Label="Source3" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="36" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="45" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="50" Label="Source3" />
      <Edge From="48" To="50" Label="Source1" />
      <Edge From="49" To="50" Label="Source2" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="56" To="59" Label="Source1" />
      <Edge From="57" To="59" Label="Source2" />
      <Edge From="58" To="59" Label="Source3" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="67" Label="Source2" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="73" Label="Source2" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="79" Label="Source1" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>