<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>drawStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Events</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>FileCount</Suffix>
        <FileName>Log.csv</FileName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>rand</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="mx:AnalogInput">
            <mx:SignalSource />
            <mx:SampleRate>1000</mx:SampleRate>
            <mx:ActiveEdge>Rising</mx:ActiveEdge>
            <mx:SampleMode>ContinuousSamples</mx:SampleMode>
            <mx:BufferSize>1</mx:BufferSize>
            <mx:SamplesPerRead>-1</mx:SamplesPerRead>
            <mx:Channels>
              <mx:AnalogInputChannelConfiguration>
                <mx:ChannelName>Photodiode</mx:ChannelName>
                <mx:MinimumValue>-10</mx:MinimumValue>
                <mx:MaximumValue>10</mx:MaximumValue>
                <mx:PhysicalChannel>Dev1/ai3</mx:PhysicalChannel>
                <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                <mx:VoltageUnits>Volts</mx:VoltageUnits>
              </mx:AnalogInputChannelConfiguration>
              <mx:AnalogInputChannelConfiguration>
                <mx:ChannelName>FrameClock</mx:ChannelName>
                <mx:MinimumValue>-10</mx:MinimumValue>
                <mx:MaximumValue>10</mx:MaximumValue>
                <mx:PhysicalChannel>Dev1/ai7</mx:PhysicalChannel>
                <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                <mx:VoltageUnits>Volts</mx:VoltageUnits>
              </mx:AnalogInputChannelConfiguration>
              <mx:AnalogInputChannelConfiguration>
                <mx:ChannelName>Camera</mx:ChannelName>
                <mx:MinimumValue>-10</mx:MinimumValue>
                <mx:MaximumValue>10</mx:MaximumValue>
                <mx:PhysicalChannel>Dev1/ai2</mx:PhysicalChannel>
                <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                <mx:VoltageUnits>Volts</mx:VoltageUnits>
              </mx:AnalogInputChannelConfiguration>
              <mx:AnalogInputChannelConfiguration>
                <mx:ChannelName>PockelFeedback</mx:ChannelName>
                <mx:MinimumValue>-10</mx:MinimumValue>
                <mx:MaximumValue>10</mx:MaximumValue>
                <mx:PhysicalChannel>Dev1/ai5</mx:PhysicalChannel>
                <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                <mx:VoltageUnits>Volts</mx:VoltageUnits>
              </mx:AnalogInputChannelConfiguration>
              <mx:AnalogInputChannelConfiguration>
                <mx:ChannelName>Piezo</mx:ChannelName>
                <mx:MinimumValue>-10</mx:MinimumValue>
                <mx:MaximumValue>10</mx:MaximumValue>
                <mx:PhysicalChannel>Dev1/ai6</mx:PhysicalChannel>
                <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
                <mx:VoltageUnits>Volts</mx:VoltageUnits>
              </mx:AnalogInputChannelConfiguration>
            </mx:Channels>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>AnalogIn</Format>
          <Selector xsi:nil="true" />
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:MatrixWriter">
            <dsp:Path>NiDaqInput</dsp:Path>
            <dsp:Suffix>FileCount</dsp:Suffix>
            <dsp:Overwrite>false</dsp:Overwrite>
            <dsp:Layout>RowMajor</dsp:Layout>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>NIDAQ</Format>
          <Selector>Rows,Cols,Step</Selector>
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Quad</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
          <ExtentX>0.1</ExtentX>
          <ExtentY>0.1</ExtentY>
          <LocationX>1.1</LocationX>
          <LocationY>-0.9</LocationY>
          <Layer>0</Layer>
          <Angle>0</Angle>
          <ColorR>1</ColorR>
          <ColorG>1</ColorG>
          <ColorB>1</ColorB>
          <ColorA>1</ColorA>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PresentStimuli</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\BonsaiExamples\csvSampleMoving - Copy.csv</io:FileName>
              <io:ListSeparator>,</io:ListSeparator>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>rand</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Single.Parse(it[0]) as X_S,
Single.Parse(it[1]) as X_E,
Single.Parse(it[2]) as Y_S,
Single.Parse(it[3]) as Y_E,
Single.Parse(it[4]) as Dia,
Double.parse(it[5]) as Dur,
TimeSpan.FromSeconds(Double.Parse(it[5])) as DurT
)</scr:Expression>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>Circle group</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>drawStim</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                    <Format>Stim: {0},{1},{2},{3},{4},{5}</Format>
                    <Selector>X_S,X_E,Y_S,Y_E,Dia,Dur</Selector>
                    <Name>Events</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RangeBegin" Selector="X_S" />
                      <Property Name="RangeEnd" Selector="X_E" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RangeBegin" Selector="Y_S" />
                      <Property Name="RangeEnd" Selector="Y_E" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Dia" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" Selector="Dur" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                    <Duration>4.5</Duration>
                    <RangeBegin>40</RangeBegin>
                    <RangeEnd>15</RangeEnd>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="DurT" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT4.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="DurT" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" Selector="Dur" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                    <Duration>4.5</Duration>
                    <RangeBegin>0</RangeBegin>
                    <RangeEnd>0</RangeEnd>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>28.7962971</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Diameter>1</Diameter>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0.1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>Sync</Name>
                    </Builder>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="15" Label="Source1" />
                  <Edge From="0" To="22" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="2" To="6" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="2" To="11" Label="Source1" />
                  <Edge From="2" To="12" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="13" Label="Source1" />
                  <Edge From="5" To="15" Label="Source4" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="15" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="16" Label="Source2" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source3" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="spk:SpinnakerCapture">
            <spk:Index xsi:nil="true" />
            <spk:SerialNumber>21225772</spk:SerialNumber>
            <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>Video.avi</cv:FileName>
            <cv:Suffix>FileCount</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>100</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>Video</Format>
          <Selector xsi:nil="true" />
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gli:KeyDown">
            <gli:Key>Q</gli:Key>
            <gli:Modifiers>Control</gli:Modifiers>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EndAcq</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port2/line6</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port2/line6</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>StartAcq</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port1/line0</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                      <mx:Lines>Dev1/port1/line0</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncQuadLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Boolean">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>drawStim</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Boolean">
              <Name>SyncSum</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Xor">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SyncSum</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Mod">
                <Operand xsi:type="DoubleProperty">
                  <Value>2</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="it" />
                <Property Name="ColorG" Selector="it" />
                <Property Name="ColorB" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>10</ExtentX>
              <ExtentY>10</ExtentY>
              <LocationX>27</LocationX>
              <LocationY>24</LocationY>
              <Layer>10</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="14" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetSave</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Data\SS113\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="scr:PythonSource">
              <scr:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</scr:Script>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Video.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>VideoPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Log.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>LogPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\NiDaqInput.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>NidaqPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\VideoBottom.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>VideoPathBottom</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="7" Label="Source3" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="11" To="13" Label="Source2" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="19" Label="Source2" />
            <Edge From="18" To="19" Label="Source3" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="25" Label="Source3" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>