<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="BehaviorSubject">
        <Name>DrawStim</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ChirpContrast</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChirpDuration</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
              <Duration>10</Duration>
              <RangeBegin>0</RangeBegin>
              <RangeEnd>1</RangeEnd>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Amplitude" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>1</dsp:BufferLength>
                <dsp:Frequency>10</dsp:Frequency>
                <dsp:Waveform>Sine</dsp:Waveform>
                <dsp:SampleRate>100</dsp:SampleRate>
                <dsp:Amplitude>0.5</dsp:Amplitude>
                <dsp:Offset>0.5</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="it" />
                <Property Name="ColorG" Selector="it" />
                <Property Name="ColorB" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.206107378</ColorR>
              <ColorG>0.206107378</ColorG>
              <ColorB>0.206107378</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="12" Label="Source2" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ChirpFrequency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChirpHigh</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeEnd" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChirpLow</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeBegin" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
              <Duration>10</Duration>
              <RangeBegin>0.5</RangeBegin>
              <RangeEnd>50</RangeEnd>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>1</dsp:BufferLength>
                <dsp:Frequency>25.25</dsp:Frequency>
                <dsp:Waveform>Sine</dsp:Waveform>
                <dsp:SampleRate>100</dsp:SampleRate>
                <dsp:Amplitude>1</dsp:Amplitude>
                <dsp:Offset>0.5</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="it" />
                <Property Name="ColorG" Selector="it" />
                <Property Name="ColorB" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChirpDuration</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.378564149</ColorR>
              <ColorG>0.378564149</ColorG>
              <ColorB>0.378564149</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source2" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LightOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LightDuration</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BlueOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LightDuration</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GreenOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>1</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LightDuration</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GreyOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GreyOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GreyOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>100</ExtentX>
              <ExtentY>100</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sync</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ChirpDuration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>0.5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ChirpLow</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ChirpHigh</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LightDuration</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncQuadLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Boolean">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Mod">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="it" />
                <Property Name="ColorG" Selector="it" />
                <Property Name="ColorB" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.1</ExtentX>
              <ExtentY>0.1</ExtentY>
              <LocationX>-0.95</LocationX>
              <LocationY>0.95</LocationY>
              <Layer>10</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="10" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="14" Label="Source3" />
      <Edge From="7" To="14" Label="Source5" />
      <Edge From="8" To="14" Label="Source1" />
      <Edge From="9" To="14" Label="Source7" />
      <Edge From="10" To="14" Label="Source8" />
      <Edge From="11" To="14" Label="Source2" />
      <Edge From="12" To="14" Label="Source4" />
      <Edge From="13" To="14" Label="Source6" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>