WorkflowBuilder(Version=2.6.2)
Bonsai.IO.CreateSerialPort
  Name=ArduinoAnalog
  PortName=COM3
  BaudRate=115200
  Encoding=utf-8
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=true
  RtsEnable=false
  ReadBufferSize=2048
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

GroupWorkflow SetSave
    StringProperty(Value=C:\Data\SS113\)
    -> BehaviorSubject "Saving Dir"

    Bonsai.Scripting.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyy-MM-dd")
    -> BehaviorSubject DateDir

    StringProperty(Value=\Video.avi) => #4
    SubscribeSubject "Saving Dir" => #5
    SubscribeSubject DateDir => #6
    #5, #6, #4 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject VideoPath

    SubscribeSubject "Saving Dir" => #10
    SubscribeSubject DateDir => #11
    StringProperty(Value=\Log.csv) => #12
    #10, #11, #12 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject LogPath

    SubscribeSubject "Saving Dir" => #16
    SubscribeSubject DateDir => #17
    StringProperty(Value=\NiDaqInput.bin) => #18
    #16, #17, #18 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject NidaqPath

    SubscribeSubject "Saving Dir" => #22
    SubscribeSubject DateDir => #23
    StringProperty(Value=\ArduinoInput.csv) => #24
    #22, #23, #24 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject ArduinoInput

Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n)
-> Skip(Count=20)
-> Condition
    WorkflowInput Source1
    -> Bonsai.Scripting.PythonTransform
      Script:
        @returns(bool)
        def process(value):
          mylist = value.split("\t")

          if len(mylist) == 6:
            return True
          else:
            return False
    -> WorkflowOutput
-> Parse(Pattern="%I\t%I\t%I\t%I\t%I\t%I,", Separator="") => #5
-> MemberSelector(Selector=Item2) => #6
#5 -> MemberSelector(Selector=Item1) => #7
#5 -> MemberSelector(Selector=Item3) => #8
#5 -> MemberSelector(Selector=Item4) => #9
#5 -> MemberSelector(Selector=Item6) => #10
#5 -> MemberSelector(Selector=Item5) => #11
#7, #6, #8, #9, #11, #10 -> Zip
-> Bonsai.Scripting.ExpressionTransform => #13
  Expression: new(Item1 as Wheel1, Item2 as Wheel2, Item3 as Camera, Item4 as Camera2, Item5 as Sync,  Item6 as Time)
SubscribeSubject ArduinoInput
-> PropertyMapping(FileName) => #15
#13, #15 -> Bonsai.IO.CsvWriter(FileName=C:\Data\SS113\2022-10-31\ArduinoInput.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Black
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame => #20
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-150, Right=-57, Bottom=-32, Top=48)
-> BehaviorSubject DrawStim
-> Disable IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Black, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=37.5, Height=30, Rotation(X=0, Y=103.99999834060421, Z=0), Translation(X=-17.5, Y=4, Z=4.2))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
SubscribeSubject LogPath
-> PropertyMapping(FileName) => #28
#28, #20 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=FileCount, FileName=C:\Data\SS113\2022-10-31\Log.csv)
#20 -> Sink Metadata
    WorkflowInput Source2
    -> StringProperty(Value=photodiode) => #1
    StringProperty(Value=frameclock) => #2
    StringProperty(Value=pockel) => #3
    StringProperty(Value=piezo) => #4
    StringProperty(Value=sync) => #5
    #1, #2, #3, #4, #5 -> Zip => #6
    SubscribeSubject "Saving Dir" => #7
    StringProperty(Value=\nidaqChannels.csv) => #8
    SubscribeSubject DateDir => #9
    #7, #9, #8 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #12
    #6, #12 -> Bonsai.IO.CsvWriter(FileName=C:\Data\SS113\2022-10-31\nidaqChannels.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
    -> WorkflowOutput

    StringProperty(Value=Retinal) => #15
    SubscribeSubject "Saving Dir" => #16
    StringProperty(Value=\props.csv) => #17
    SubscribeSubject DateDir => #18
    #16, #18, #17 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #21
    #15, #21 -> Bonsai.IO.CsvWriter(FileName=C:\Data\SS113\2022-10-31\props.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

    WorkflowInput Source1
    -> StringProperty(Value=rotary1) => #24
    StringProperty(Value=rotary2) => #25
    StringProperty(Value=camera1) => #26
    StringProperty(Value=camera2) => #27
    StringProperty(Value=sync) => #28
    #24, #25, #26, #27, #28 -> Zip => #29
    SubscribeSubject "Saving Dir" => #30
    StringProperty(Value=\arduinoChannels.csv) => #31
    SubscribeSubject DateDir => #32
    #30, #32, #31 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #35
    #29, #35 -> Bonsai.IO.CsvWriter(FileName=C:\Data\SS113\2022-10-31\arduinoChannels.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

IntProperty(Value=8)
-> BehaviorSubject ChirpDuration

DoubleProperty(Value=0.5)
-> BehaviorSubject ChirpLow

DoubleProperty(Value=8)
-> BehaviorSubject ChirpHigh

IntProperty(Value=2)
-> BehaviorSubject LightDuration

GroupWorkflow StartAcq
    BooleanProperty(Value=true)
    -> Bonsai.DAQmx.DigitalOutput(Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line0)))
    -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput(Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line0)))
    -> WorkflowOutput
-> Bonsai.Shaders.DelaySubscription(DueTime=PT5S)

GroupWorkflow SyncQuadLogic
    BehaviorSubject<System.Boolean> Sync => #0
    SubscribeSubject DrawStim => #1
    BehaviorSubject<System.Boolean> SyncSum => #2
    -> PropertyMapping(Value) => #3
    #0, #3 -> Xor(Operand=BooleanProperty(Value=false))
    -> MulticastSubject SyncSum
    #2 -> Condition isOn
        WorkflowInput Source1
        -> WorkflowOutput
    -> DoubleProperty(Value=1)
    -> Disable Accumulate
    -> Disable Mod(Operand=DoubleProperty(Value=2)) => #9
    #2 -> Condition isOff
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #11
    #9, #11 -> Merge
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #13
    #13, #1 -> IncludeWorkflow => #14
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=10
      ExtentY=10
      LocationX=-59
      LocationY=-21
      Layer=100
      Angle=15
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
    -> WorkflowOutput
    #14 -> Bonsai.Shaders.DelaySubscription(DueTime=PT10S)

CreateAsync VisualProtocol
    GroupWorkflow ChirpContrast => #0
        SubscribeSubject ChirpDuration
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime(Selector=it))
        -> Bonsai.Shaders.Timer(DueTime=PT8S) => #3
        SubscribeSubject DrawStim => #4
        IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=8, RangeBegin=0, RangeEnd=1)
        -> PropertyMapping(Amplitude)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=1, Frequency=10, Waveform=Sine, SampleRate=100, Amplitude=1, Offset=0.5, Phase=0)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Val0)
        -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #10
        #10, #4 -> IncludeWorkflow => #11
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0.5
          ColorG=0.5
          ColorB=0.5
          ColorA=1
        #11, #3 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #4 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow ChirpFrequency => #1
        SubscribeSubject ChirpHigh
        -> PropertyMapping(RangeEnd(Selector=it)) => #1
        SubscribeSubject ChirpLow
        -> PropertyMapping(RangeBegin(Selector=it)) => #3
        #3, #1 -> IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=10, RangeBegin=0.5, RangeEnd=8)
        -> PropertyMapping(Frequency)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=1, Frequency=6.5, Waveform=Sine, SampleRate=100, Amplitude=1, Offset=0.5, Phase=0)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Val0)
        -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #9
        SubscribeSubject ChirpDuration
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime(Selector=it))
        -> Bonsai.Shaders.Timer(DueTime=PT8S) => #13
        SubscribeSubject DrawStim => #14
        #9, #14 -> IncludeWorkflow => #15
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0.303369284
          ColorG=0.303369284
          ColorB=0.303369284
          ColorA=1
        #15, #13 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #14 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow LightOn => #2
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=-114
          LocationY=0
          Layer=0
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow BlueOn => #3
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=1
          ColorA=1
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow GreenOn => #4
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=1
          ColorB=0
          ColorA=1
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow GreyOn => #5
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0.5
          ColorG=0.5
          ColorB=0.5
          ColorA=1
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow GreyOn => #6
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0.5
          ColorG=0.5
          ColorB=0.5
          ColorA=1
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow GreyOn => #7
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=0
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0.5
          ColorG=0.5
          ColorB=0.5
          ColorA=1
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow LightOnBlack => #8
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=-113
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=0
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow LightOnBlack => #9
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=-113
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=0
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow LightOnBlack => #10
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=-113
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=0
        Bonsai.Shaders.Timer(DueTime=PT1S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow LightOnBlack => #11
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=-113
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=0
        Bonsai.Shaders.Timer(DueTime=PT4S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    GroupWorkflow LightOnBlack => #12
        SubscribeSubject DrawStim => #0
        -> IncludeWorkflow => #1
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=360
          ExtentY=360
          LocationX=-113
          LocationY=0
          Layer=0
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=0
        Bonsai.Shaders.Timer(DueTime=PT3S) => #2
        #1, #2 -> TakeUntil
        -> Last
        -> BooleanProperty(Value=true)
        -> MulticastSubject Sync
        #0 -> BooleanProperty(Value=false)
        -> Take(Count=1)
        -> MulticastSubject Sync
    #8, #2, #9, #5, #1, #6, #0, #7, #10, #3, #11, #4, #12 -> Concat
    -> RepeatCount(Count=10)
    -> LastOrDefault
    -> Bonsai.Shaders.Delay(DueTime=PT10S)
    -> GroupWorkflow EndAcq => #17
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput(Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6)))
        -> Delay(DueTime=PT0.004S)
        -> BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput(Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6)))
        -> WorkflowOutput
    Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Control)
    -> Take(Count=1)
    -> GroupWorkflow EndAcq => #20
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput(Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6)))
        -> Delay(DueTime=PT0.004S)
        -> BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput(Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6)))
        -> WorkflowOutput
    #17, #20 -> Amb
    -> WorkflowOutput

    BooleanProperty(Value=false)
    -> MulticastSubject Sync
-> Bonsai.Shaders.DelaySubscription(DueTime=PT10S)
-> WorkflowOutput

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=21225772, ColorProcessing=NoColorProcessing) => #45
SubscribeSubject VideoPath
-> PropertyMapping(FileName) => #47
Bonsai.Shaders.Timer(DueTime=PT5S) => #48
#45, #48 -> SubscribeWhen
-> MemberSelector(Selector=Image) => #50
#50, #47 -> Bonsai.Vision.VideoWriter
  FileName=C:\Data\SS113\2022-10-31\Video.avi
  Suffix=FileCount
  Buffered=false
  Overwrite=false
  FourCC=FMP4
  FrameRate=20
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=Video, Selector=nil)

Bonsai.DAQmx.AnalogInput
  SignalSource=""
  SampleRate=1000
  ActiveEdge=Rising
  SampleMode=ContinuousSamples
  BufferSize=1
  SamplesPerRead=-1
  Channels
    AnalogInputChannelConfiguration(ChannelName=Photodiode, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai3, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=FrameClock, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai7, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=PockelFeedback, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=Piezo, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=ArduinoSync, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev1/ai4, TerminalConfiguration=Rse, VoltageUnits=Volts)
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=AnalogIn, Selector=nil) => #54
SubscribeSubject NidaqPath
-> PropertyMapping(Path) => #56
#56, #54 -> Bonsai.Dsp.MatrixWriter(Path=C:\Data\SS113\2022-10-31\NiDaqInput.bin, Suffix=FileCount, Overwrite=false, Layout=RowMajor)
-> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=NIDAQ, Selector="Rows,Cols,Step")

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=21038392, ColorProcessing=NoColorProcessing)
-> MemberSelector(Selector=Image) => #60
SubscribeSubject VideoPathBottom
-> PropertyMapping(FileName) => #62
#60, #62 -> Bonsai.Vision.VideoWriter
  FileName=C:\Data\SS113\2022-12-14\VideoBottom.avi
  Suffix=FileCount
  Buffered=false
  Overwrite=false
  FourCC=FMP4
  FrameRate=60
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Timestamp
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Video,{0}", Selector=Timestamp)

StringProperty(Value=\VideoBottom.avi) => #66
SubscribeSubject "Saving Dir" => #67
SubscribeSubject DateDir => #68
#67, #68, #66 -> Zip
-> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
-> BehaviorSubject VideoPathBottom
