<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:CreateObservable">
        <Name>GiveReward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                    <mx:Lines>Dev1/port2/line4</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                    <mx:Lines>Dev1/port2/line4</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>