<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArduinoAnalog</io:Name>
          <io:PortName>COM3</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Encoding>utf-8</io:Encoding>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>ArduinoAnalog</port:Name>
          <port:PortName>COM3</port:PortName>
          <port:BaudRate>115200</port:BaudRate>
          <port:Encoding>utf-8</port:Encoding>
          <port:NewLine>\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>2048</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetSave</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\SS115\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Video.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LogPath</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.EventLogger.bonsai">
              <Name>Events</Name>
              <FileName>D:\Data\SS115\2024-03-26\Log.csv</FileName>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>FileCount</Suffix>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Log.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LogPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\ArduinoInput.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ArduinoInput</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\VideoBottom.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoPathBottom</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\CameraTicks.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CameraTriggerPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\ForwardsEncoder.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ForwardsEncoder</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\BackwardsEncoder.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BackwardsEncoder</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\NiDaqInput.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NidaqPath</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DateDir</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="14" Label="Source2" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="20" Label="Source2" />
            <Edge From="19" To="20" Label="Source3" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="32" Label="Source1" />
            <Edge From="30" To="32" Label="Source2" />
            <Edge From="31" To="32" Label="Source3" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="38" Label="Source1" />
            <Edge From="36" To="38" Label="Source2" />
            <Edge From="37" To="38" Label="Source3" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="41" To="44" Label="Source1" />
            <Edge From="42" To="44" Label="Source2" />
            <Edge From="43" To="44" Label="Source3" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>ArduinoAnalog</io:PortName>
          <io:NewLine>\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>ArduinoAnalog</port:PortName>
          <port:NewLine>\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Arduino</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Arduino</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(bool)
def process(value):
  mylist = value.split("\t")

  if len(mylist) == 6:
    return True
  else:
    return False

</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%I\t%I\t%I\t%I\t%I\t%I,</Pattern>
        <Separator />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item3</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item5</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item6</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Item1 as Wheel1, Item2 as Wheel2, Item3 as Camera, Item4 as Camera2, Item5 as Sync,  Item6 as Time)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ArduinoInput</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\Data\SS115\2024-03-26\ArduinoInput.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartAcq</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port1/line0</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port1/line0</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>GiveReward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                    <mx:Lines>Dev1/port2/line4</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                    <mx:Lines>Dev1/port2/line4</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>Stim={0}</Format>
              <Selector>Timestamp</Selector>
              <Name>Events</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT8S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NidaqPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Photodiode</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai3</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>FrameClock</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai7</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>PockelFeedback</mx:ChannelName>
              <mx:MinimumValue>-5</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai5</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Piezo</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai6</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>ArduinoSync</mx:ChannelName>
              <mx:MinimumValue>-5</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai4</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Spout</mx:ChannelName>
              <mx:MinimumValue>-1</mx:MinimumValue>
              <mx:MaximumValue>1</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>AnalogIn</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\Data\SS115\2024-03-26\NiDaqInput.bin</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>NIDAQ</Format>
          <Selector>Rows,Cols,Step</Selector>
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NidaqPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Photodiode</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai3</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>FrameClock</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai7</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>PockelFeedback</mx:ChannelName>
              <mx:MinimumValue>-5</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai5</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Piezo</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai6</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Spout</mx:ChannelName>
              <mx:MinimumValue>-1</mx:MinimumValue>
              <mx:MaximumValue>1</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai2</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>ArduinoSync</mx:ChannelName>
              <mx:MinimumValue>-5</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai4</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\Data\SS115\2024-03-26\NiDaqInput.bin</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>NIDAQ, {0}</Format>
        <Selector>Timestamp</Selector>
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Metadata</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source4</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>photodiode</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>frameclock</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>pockel</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>piezo</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>sync</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>lick</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\nidaqChannels.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\SS115\2024-03-26\nidaqChannels.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>photodiode</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>frameclock</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>pockel</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>piezo</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>lick</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>sync</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\nidaqChannels.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\Styx\2024-01-31\nidaqChannels.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source6</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>lick</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\nidaqChannels.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\SS115\2024-03-26\nidaqChannels.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>rotary1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>rotary2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>camera1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>camera2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>sync</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\arduinoChannels.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\SS115\2024-03-26\arduinoChannels.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>RewardOnly</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\props.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\SS115\2024-03-26\props.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="7" Label="Source2" />
            <Edge From="3" To="7" Label="Source3" />
            <Edge From="4" To="7" Label="Source4" />
            <Edge From="5" To="7" Label="Source5" />
            <Edge From="6" To="7" Label="Source6" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="11" Label="Source2" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="23" Label="Source1" />
            <Edge From="18" To="23" Label="Source2" />
            <Edge From="19" To="23" Label="Source3" />
            <Edge From="20" To="23" Label="Source4" />
            <Edge From="21" To="23" Label="Source5" />
            <Edge From="22" To="23" Label="Source6" />
            <Edge From="23" To="30" Label="Source1" />
            <Edge From="24" To="27" Label="Source1" />
            <Edge From="25" To="27" Label="Source2" />
            <Edge From="26" To="27" Label="Source3" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="39" Label="Source1" />
            <Edge From="33" To="36" Label="Source1" />
            <Edge From="34" To="36" Label="Source2" />
            <Edge From="35" To="36" Label="Source3" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="46" Label="Source1" />
            <Edge From="42" To="46" Label="Source2" />
            <Edge From="43" To="46" Label="Source3" />
            <Edge From="44" To="46" Label="Source4" />
            <Edge From="45" To="46" Label="Source5" />
            <Edge From="46" To="53" Label="Source1" />
            <Edge From="47" To="50" Label="Source1" />
            <Edge From="48" To="50" Label="Source2" />
            <Edge From="49" To="50" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source2" />
            <Edge From="54" To="61" Label="Source1" />
            <Edge From="55" To="58" Label="Source1" />
            <Edge From="56" To="58" Label="Source2" />
            <Edge From="57" To="58" Label="Source3" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT20M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EndAcq</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port2/line6</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.004S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port2/line6</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21225772</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\Data\SS115\2024-03-26\Video.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Video,{0}</Format>
        <Selector>Timestamp</Selector>
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>Decoy</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>true</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:SignalSource />
                  <mx:SampleRate>0</mx:SampleRate>
                  <mx:ActiveEdge>Rising</mx:ActiveEdge>
                  <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                  <mx:BufferSize>1000</mx:BufferSize>
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                      <mx:Lines>Dev1/port2/line3</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Delay">
                  <rx:DueTime>PT0.01S</rx:DueTime>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="BooleanProperty">
                  <Value>false</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="mx:DigitalOutput">
                  <mx:SignalSource />
                  <mx:SampleRate>0</mx:SampleRate>
                  <mx:ActiveEdge>Rising</mx:ActiveEdge>
                  <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                  <mx:BufferSize>1000</mx:BufferSize>
                  <mx:Channels>
                    <mx:DigitalOutputChannelConfiguration>
                      <mx:ChannelName />
                      <mx:Grouping>OneChannelForAllLines</mx:Grouping>
                      <mx:Lines>Dev1/port2/line3</mx:Lines>
                    </mx:DigitalOutputChannelConfiguration>
                  </mx:Channels>
                </Combinator>
              </Expression>
              <Expression xsi:type="ipy:PythonSource">
                <ipy:Script>from System import Random, TimeSpan
random = Random()

@returns(TimeSpan)
def generate():
  ind = random.Next(0,4)
  yield TimeSpan.FromSeconds(random.NextDouble() * (5 - 1) + 1)</ipy:Script>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                <Format>Decoy ISI: {0}</Format>
                <Selector>TotalSeconds</Selector>
                <Name>Events</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="DueTime" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Delay">
                  <rx:DueTime>PT1.224S</rx:DueTime>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timestamp" />
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                <Format>Decoy {0}</Format>
                <Selector>Timestamp</Selector>
                <Name>Events</Name>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="1" To="10" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="8" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source2" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Concat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Repeat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21038392</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoPathBottom</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\Data\SS115\2024-03-26\VideoBottom.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Video,{0}</Format>
        <Selector>Timestamp</Selector>
        <Name>Events</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="9" To="15" Label="Source1" />
      <Edge From="10" To="16" Label="Source1" />
      <Edge From="11" To="16" Label="Source2" />
      <Edge From="12" To="16" Label="Source3" />
      <Edge From="13" To="16" Label="Source4" />
      <Edge From="14" To="16" Label="Source5" />
      <Edge From="15" To="16" Label="Source6" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="36" To="40" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="49" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source2" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="60" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source2" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>