<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SyncQuadLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>drawStim</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Boolean">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Mod">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="it" />
                <Property Name="ColorG" Selector="it" />
                <Property Name="ColorB" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>10</ExtentX>
              <ExtentY>10</ExtentY>
              <LocationX>-59</LocationX>
              <LocationY>-21</LocationY>
              <Layer>100</Layer>
              <Angle>15</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="10" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-150</Left>
        <Right>-57</Right>
        <Bottom>-32</Bottom>
        <Top>48</Top>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>drawStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>37.5</Width>
        <Height>30</Height>
        <Rotation>
          <X>0</X>
          <Y>103.99999834060421</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>-17.5</X>
          <Y>4</Y>
          <Z>4.2</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>1</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>rand</Name>
      </Expression>
      <Expression xsi:type="CreateAsync">
        <Name>CirclePres</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>csvCircleStationaryAccordingToSparseNoie.csv</io:FileName>
              <io:ListSeparator>,</io:ListSeparator>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>rand</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Single.Parse(it[0]) as X,
Single.Parse(it[1]) as Y,
Single.Parse(it[2]) as Diameter,
Single.Parse(it[3]) as White,
Double.parse(it[4]) as Dur,
TimeSpan.FromSeconds(Double.Parse(it[4])) as dueTime
)</scr:Expression>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>Circle group</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>drawStim</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="dueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="White" />
                      <Property Name="ColorG" Selector="White" />
                      <Property Name="ColorB" Selector="White" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Diameter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationY" Selector="Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" Selector="X" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>-125</LocationX>
                    <LocationY>40</LocationY>
                    <Layer>0</Layer>
                    <Diameter>2</Diameter>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="12" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="13" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="12" Label="Source5" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT10S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EndAcq</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gli:KeyDown">
                <gli:Key>Q</gli:Key>
                <gli:Modifiers>Control</gli:Modifiers>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EndAcq</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>