<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="BehaviorSubject">
        <Name>drawStim</Name>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>D:\Bonsai\VisualProtocols\csvSquareMoving.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:SkipRows>1</io:SkipRows>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>rand</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Permutation" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Single.Parse(it[0]) as X_S,
Single.Parse(it[1]) as X_E,
Single.Parse(it[2]) as Y_S,
Single.Parse(it[3]) as Y_E,
Single.Parse(it[4]) as Angle,
Double.parse(it[5]) as Dur,
TimeSpan.FromSeconds(Double.Parse(it[5])) as DurT
)</scr:Expression>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>Bar</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>drawStim</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Inputs</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeBegin" Selector="X_S" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeEnd" Selector="X_E" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Duration" Selector="Dur" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
              <Duration>10</Duration>
              <RangeBegin>1</RangeBegin>
              <RangeEnd>-1</RangeEnd>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeBegin" Selector="Y_S" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeEnd" Selector="Y_E" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Duration" Selector="Dur" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
              <Duration>10</Duration>
              <RangeBegin>-1</RangeBegin>
              <RangeEnd>1</RangeEnd>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" Selector="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>4</ExtentX>
              <ExtentY>0.5</ExtentY>
              <LocationX>0.33</LocationX>
              <LocationY>-0.33</LocationY>
              <Layer>0</Layer>
              <Angle>2578.31</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" Selector="DurT" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT10S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Inputs</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="1" To="14" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="10" Label="Source2" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source3" />
            <Edge From="12" To="13" Label="Source4" />
            <Edge From="13" To="16" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>rand</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>