<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArduinoAnalog</io:Name>
          <io:PortName>COM3</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Encoding>utf-8</io:Encoding>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>2048</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>ArduinoAnalog</io:PortName>
          <io:NewLine>\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>@returns(bool)
def process(value):
  mylist = value.split("\t")

  if len(mylist) == 6:
    return True
  else:
    return False

</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%I\t%I\t%I\t%I\t%I\t%I,</Pattern>
        <Separator />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item3</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item6</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item5</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Item1 as Wheel1, Item2 as Wheel2, Item3 as Camera, Item4 as Camera2, Item5 as Sync,  Item6 as Time)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ArduinoInput</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Data\SS113\2022-09-06\ArduinoInput.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="WindowState" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Set Bonvision params</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" />
              <Property Name="WindowState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicVideo</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-150</Left>
              <Right>-57</Right>
              <Bottom>-32</Bottom>
              <Top>48</Top>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <Angle>0</Angle>
              <TextureName>DynamicVideo</TextureName>
              <ExtentX>91</ExtentX>
              <ExtentY>82</ExtentY>
              <LocationX>-99</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>37.5</Width>
              <Height>30</Height>
              <Rotation>
                <X>0</X>
                <Y>103.99999834060421</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-17.5</X>
                <Y>4</Y>
                <Z>4.2</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LogDir</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
              <Name>Events</Name>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>FileCount</Suffix>
              <FileName>C:\Data\SS113\2022-09-06\Log.csv</FileName>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>Metadata</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>photodiode</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>frameclock</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>pockel</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>piezo</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>sync</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Saving Dir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\nidaqChannels.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DateDir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\SS113\2022-09-06\nidaqChannels.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>9</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>8</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Saving Dir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\props.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DateDir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\SS113\2022-09-06\props.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>rotary1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>rotary2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>camera1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>camera2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>sync</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Saving Dir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\arduinoChannels.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DateDir</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Data\SS113\2022-09-06\arduinoChannels.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>FileCount</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="6" Label="Source2" />
                  <Edge From="3" To="6" Label="Source3" />
                  <Edge From="4" To="6" Label="Source4" />
                  <Edge From="5" To="6" Label="Source5" />
                  <Edge From="6" To="13" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="10" Label="Source3" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="24" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="21" Label="Source3" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="31" Label="Source1" />
                  <Edge From="27" To="31" Label="Source2" />
                  <Edge From="28" To="31" Label="Source3" />
                  <Edge From="29" To="31" Label="Source4" />
                  <Edge From="30" To="31" Label="Source5" />
                  <Edge From="31" To="38" Label="Source1" />
                  <Edge From="32" To="35" Label="Source1" />
                  <Edge From="33" To="35" Label="Source3" />
                  <Edge From="34" To="35" Label="Source2" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="16" Label="Source1" />
            <Edge From="5" To="17" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init Variables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>22</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>22</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitialSyncState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DurationSingleImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>R</gli:Key>
          <gli:Modifiers>Control</gli:Modifiers>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>Q</gli:Key>
          <gli:Modifiers>Control</gli:Modifiers>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FinalGrayScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>120</ExtentX>
              <ExtentY>120</ExtentY>
              <LocationX>-60</LocationX>
              <LocationY>30</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartDisplay</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventArgs.Time</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialGray Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>91</ExtentX>
              <ExtentY>82</ExtentY>
              <LocationX>-99</LocationX>
              <LocationY>0</LocationY>
              <Layer>2</Layer>
              <Angle>0</Angle>
              <ColorR>0.5</ColorR>
              <ColorG>0.5</ColorG>
              <ColorB>0.5</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SparseNoise Group</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Collections.SparseNoise.bonsai">
              <Duration>PT0.166666S</Duration>
              <ActiveQuads>5</ActiveQuads>
              <GridSize>
                <Width>9</Width>
                <Height>8</Height>
              </GridSize>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>SparseNoiseFrame</Format>
              <Selector xsi:nil="true" />
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SparseNoiseDir</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>C:\Data\SS113\2022-09-06\SparseNoise.bin</dsp:Path>
                <dsp:Suffix>FileCount</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>TriggerSyncQuad</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Mod">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Sync</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>RepCounter</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateTexture">
                <gl:TextureName>DynamicVideo</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
                <gl:InternalFormat>Rgba</gl:InternalFormat>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT10M</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EndAcq</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port2/line6</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port2/line6</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>StartDisplay</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EndAcq</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port2/line6</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port2/line6</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Amb" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Sync Square</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>10</ExtentX>
              <ExtentY>10</ExtentY>
              <LocationX>-59</LocationX>
              <LocationY>-21</LocationY>
              <Layer>100</Layer>
              <Angle>15</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerRead>-1</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Photodiode</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai3</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>FrameClock</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai7</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>PockelFeedback</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai5</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Piezo</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai6</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>ArduinoSync</mx:ChannelName>
              <mx:MinimumValue>-5</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai4</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NidaqDir</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Data\SS113\2022-09-06\NiDaqInput.bin</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>NiDaqLog</Format>
        <Selector />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21225772</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoDir</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Data\SS113\2022-09-06\Video.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>20</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>VideoFrame</Format>
        <Selector />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartAcq</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port1/line0</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port1/line0</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Data\SS113\</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="scr:PythonSource">
        <scr:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</scr:Script>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\Video.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>VideoDir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\NiDaqInput.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NidaqDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\SparseNoise.bin</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>SparseNoiseDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\Log.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>LogDir</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalInput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>4</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>CameraTriggerPath</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Data\Test\2022-04-13\CameraTicks.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalInput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>8</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ForwardsEncoder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Data\Test\2022-04-13\ForwardsEncoder.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalInput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>10</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>BackwardsEncoder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Data\Test\2022-04-13\BackwardsEncoder.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Saving Dir</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DateDir</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>\CameraTicks.csv</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{0}{1}{2}</Format>
          <Selector>Item1,Item2,Item3</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>CameraTriggerPath</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Saving Dir</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DateDir</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>\ForwardsEncoder.csv</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{0}{1}{2}</Format>
          <Selector>Item1,Item2,Item3</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>ForwardsEncoder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Saving Dir</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DateDir</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>\BackwardsEncoder.csv</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{0}{1}{2}</Format>
          <Selector>Item1,Item2,Item3</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>BackwardsEncoder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>CameraTriggerPath</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>7</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>CameraIn</Format>
          <Selector xsi:nil="true" />
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Data\SS109\2022-04-26\CameraTicks.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ForwardsEncoder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>5</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>ForwardIn</Format>
          <Selector xsi:nil="true" />
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Data\SS109\2022-04-26\ForwardsEncoder.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>3</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
          <Format>BackwardsIn</Format>
          <Selector xsi:nil="true" />
          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>BackwardsEncoder</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Data\SS109\2022-04-26\BackwardsEncoder.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>FileCount</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\ArduinoInput.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ArduinoInput</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21038392</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoPathBottom</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Data\Test\2022-09-09\VideoBottom.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Video,{0}</Format>
        <Selector>Timestamp</Selector>
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\VideoBottom.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Saving Dir</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DateDir</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}{1}{2}</Format>
        <Selector>Item1,Item2,Item3</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>VideoPathBottom</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="5" To="11" Label="Source2" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="7" To="11" Label="Source3" />
      <Edge From="8" To="11" Label="Source4" />
      <Edge From="9" To="11" Label="Source6" />
      <Edge From="10" To="11" Label="Source5" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="22" To="27" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="34" Label="Source3" />
      <Edge From="25" To="33" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="34" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="37" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="40" To="43" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="49" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="51" Label="Source2" />
      <Edge From="48" To="49" Label="Source2" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="59" To="62" Label="Source3" />
      <Edge From="60" To="62" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="65" To="68" Label="Source1" />
      <Edge From="66" To="68" Label="Source2" />
      <Edge From="67" To="68" Label="Source3" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="71" To="74" Label="Source3" />
      <Edge From="72" To="74" Label="Source1" />
      <Edge From="73" To="74" Label="Source2" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="77" To="80" Label="Source3" />
      <Edge From="78" To="80" Label="Source1" />
      <Edge From="79" To="80" Label="Source2" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="84" To="87" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="86" To="87" Label="Source2" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="92" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="92" Label="Source2" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="97" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="96" To="97" Label="Source2" />
      <Edge From="98" To="101" Label="Source1" />
      <Edge From="99" To="101" Label="Source2" />
      <Edge From="100" To="101" Label="Source3" />
      <Edge From="101" To="102" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="104" To="107" Label="Source1" />
      <Edge From="105" To="107" Label="Source2" />
      <Edge From="106" To="107" Label="Source3" />
      <Edge From="107" To="108" Label="Source1" />
      <Edge From="108" To="109" Label="Source1" />
      <Edge From="110" To="113" Label="Source1" />
      <Edge From="111" To="113" Label="Source2" />
      <Edge From="112" To="113" Label="Source3" />
      <Edge From="113" To="114" Label="Source1" />
      <Edge From="114" To="115" Label="Source1" />
      <Edge From="116" To="117" Label="Source1" />
      <Edge From="117" To="121" Label="Source2" />
      <Edge From="118" To="119" Label="Source1" />
      <Edge From="119" To="120" Label="Source1" />
      <Edge From="120" To="121" Label="Source1" />
      <Edge From="122" To="123" Label="Source1" />
      <Edge From="123" To="127" Label="Source2" />
      <Edge From="124" To="125" Label="Source1" />
      <Edge From="125" To="126" Label="Source1" />
      <Edge From="126" To="127" Label="Source1" />
      <Edge From="128" To="129" Label="Source1" />
      <Edge From="129" To="130" Label="Source1" />
      <Edge From="130" To="133" Label="Source1" />
      <Edge From="131" To="132" Label="Source1" />
      <Edge From="132" To="133" Label="Source2" />
      <Edge From="134" To="137" Label="Source1" />
      <Edge From="135" To="137" Label="Source2" />
      <Edge From="136" To="137" Label="Source3" />
      <Edge From="137" To="138" Label="Source1" />
      <Edge From="138" To="139" Label="Source1" />
      <Edge From="140" To="141" Label="Source1" />
      <Edge From="141" To="144" Label="Source1" />
      <Edge From="142" To="143" Label="Source1" />
      <Edge From="143" To="144" Label="Source2" />
      <Edge From="144" To="145" Label="Source1" />
      <Edge From="145" To="146" Label="Source1" />
      <Edge From="147" To="150" Label="Source3" />
      <Edge From="148" To="150" Label="Source1" />
      <Edge From="149" To="150" Label="Source2" />
      <Edge From="150" To="151" Label="Source1" />
      <Edge From="151" To="152" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>