<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>960</gl:Width>
          <gl:Height>540</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="BehaviorSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>0</RangeMin>
        <RangeMax>1</RangeMax>
        <Count>10</Count>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>blue</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FullscreenQuads</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT2S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ColorB" />
                    <Property Name="ColorR" />
                    <Property Name="ColorG" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>100</ExtentX>
                    <ExtentY>100</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>0</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:SamplesPerRead>-1</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai3</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\LABadmin\Documents\GitHub\ExperimentalProtocols\Bonvision\Maria\monitor_calibration\output_files\afterGC\optimalG\Calibration_blue0</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT21S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>